PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = deception_task
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Routines
  Routine ID_Entry
    PolygonComponent back2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textID
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please enter your subject ID below:

        (Press “space” to continue)
    TextboxComponent IDRESPONSE
      bold = False
      borderColor = white
      editable = True
      fillColor = black
      letterHeight = 0.05
      padding = None
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ID
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    KeyboardComponent key_respID
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    PolygonComponent back3
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textinstructions
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be answering questions created using information from the Autobiographical Memory Questionnaire you completed earlier.

        The task consists of 2 conditions in total, and each condition will require you to answer a total of 40 items. There will be a short break between the 2 conditions.

        (Press “space” to continue)
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Example
    PolygonComponent back4
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textexample
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent textexample1
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $condition
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    PolygonComponent buttonexample
      fillColor = grey
      lineColor = grey
      pos = (0, -0.42)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent textans
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press “space” to begin answering
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine Social_Condition
    PolygonComponent back5
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textsocial
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        SOCIAL CONDITION

        During this condition, an examiner will be observing you through a live video chat. He will be rating your response as you reply verbally to determine if you are telling the truth or lying.

        (Press “space” to continue)
    KeyboardComponent key_ressoc
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Connecting
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        jitter_connecting = np.random.uniform(0.7, 1.5, 1)
    PolygonComponent back9
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_connecting
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    TextComponent textconnecting
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_connecting
      text = Waiting for interviewer …
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    PolygonComponent sensor3
      fillColor = white
      pos = (-0.77, -0.47)
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Social
    PolygonComponent back6
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent truth1_text
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $question
    TextComponent truth1_instruction
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $condition
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    PolygonComponent buttoncon
      fillColor = grey
      lineColor = grey
      pos = (0, -0.42)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent textanswer
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press “space” to begin answering
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    PolygonComponent sensor2
      fillColor = white
      pos = (-0.77, -0.47)
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent keysocial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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  Routine Disconnecting
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        jitter_disconnecting = np.random.uniform(1.5, 2.5, 1)
    PolygonComponent back10
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_disconnecting
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    TextComponent textdisconnecting
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_disconnecting
      text = Interviewer is rating your answer …
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    PolygonComponent sensor4
      fillColor = white
      pos = (-0.77, -0.47)
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Break
    PolygonComponent back8
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textbreak
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have completed the Social Condition!


        Please inform the experimenter NOW.


        You can now take a break before continuing to the Polygraph Condition.








        (Press “space” when you are instructed to continue)
    KeyboardComponent key_respbreak
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    PolygonComponent back11
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent textend
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Congrats! You have completed the Polygraph Condition!

        This concludes the behavioural test on the Deception Task.

        Please inform the experimenter NOW.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
      store = nothing
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  Routine ExampleResponse
    PolygonComponent back12
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent videotest
      fillColor = grey
      lineColor = grey
      pos = (0, 0.08)
      saveStartStop = False
      shape = rectangle
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    PolygonComponent buttontest
      fillColor = grey
      lineColor = grey
      pos = (0, -0.42)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_button
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Press “space” to continue
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    TextComponent text_2
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Live Video Chat
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    TextComponent text_sample
      disabled = True
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = A live video chat will appear here later when the test begins
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    TextComponent text_4
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $respond
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
      store = nothing
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  Routine Polygraph_Condition
    PolygonComponent back13
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        POLYGRAPH CONDITION

        During this condition, you will not be observed by an examiner. Instead, a bio-device will rate your physiological responses to determine whether you told a truth or a lie.

        (Press “space” to continue)
    KeyboardComponent key_resppoly
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Response_S
    PolygonComponent back7
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    MovieComponent videoresponse
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $video
      pos = (0, 0.08)
      saveStartStop = False
      size = (1.6, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    PolygonComponent button
      fillColor = grey
      lineColor = grey
      pos = (0, -0.42)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent textbutton
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Press “space” to continue
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    TextComponent textvideo
      letterHeight = 0.04
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Live Video Chat
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    PolygonComponent sensor
      fillColor = white
      pos = (-0.77, -0.47)
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 9
      store = nothing
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  Routine Response_P
    PolygonComponent back14
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent button1
      fillColor = grey
      lineColor = grey
      pos = (0, -0.42)
      saveStartStop = False
      shape = rectangle
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent buttont
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Press “space” to continue
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    PolygonComponent sensor1
      fillColor = white
      pos = (-0.77, -0.47)
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent textpoly
      letterHeight = 0.04
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Bio-Device
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    MovieComponent bitalinovid
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $bitalino
      pos = (0, 0.08)
      saveStartStop = False
      size = (1.8, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    KeyboardComponent key_resresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
      store = nothing
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  Routine BioConnect
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        jitter_bioconnect = np.random.uniform(0.7, 1.5, 1)
    PolygonComponent back15
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_bioconnect
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    TextComponent textbioconnect
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_bioconnect
      text = Bio-device is connecting …
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    PolygonComponent sensor5
      fillColor = white
      pos = (-0.77, -0.47)
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine BioDisConnect
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        jitter_biodisconnect = np.random.uniform(1.5, 2.5, 1)
    PolygonComponent back16
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_biodisconnect
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    TextComponent textbiodisconnect
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_biodisconnect
      text = Bio-device is rating your scores …
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    PolygonComponent sensor6
      fillColor = $[1,1,1]
      pos = (-0.77, -0.47)
      shape = rectangle
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine PolyInstruct2
    PolygonComponent back17
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textpolyinstruct
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For this condition, you will be viewing your own physiological signals instead of a live video chat.

        Please respond to each item in complete sentences.

        You have a maximum of 10 seconds to give your response for each item. If you complete it earlier, you can press “space” to continue.

        (Press “space” to begin!)
    KeyboardComponent key_resppoly2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SocialInstruct2
    PolygonComponent back18
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textsocioal2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please respond to each item in complete sentences.

        You have a maximum of 10 seconds to give your response for each item. If you complete it earlier, you can press “space” to continue.

        (Press “space” to begin!)
    KeyboardComponent key_ressoc2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions2
    PolygonComponent back19
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textinstruct2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For each item, you will be presented with a question. You will see instructions on screen to either tell the truth or lie to it, and you will have to respond to the question verbally in the screen following that.

        Please reply to the questions in complete sentences. When you are done replying, press “space” to continue to the next question.

        The next screen will show you some examples.

        (Press “space” to continue)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trials
    PolygonComponent back20
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_trial
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the next few slides, we will present to you the same example questions you saw previously.

        However, it is now your turn to try answering them to get the hang of it!

        (Press “space” to begin!)
    KeyboardComponent key_resptrial
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SubjectiveR
    PolygonComponent back22
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent textsubjresp
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How do you think your response was rated?
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    KeyboardComponent keyrespsubj
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    SliderComponent SubjectiveResponse
      forceEndRoutine = False
      granularity = 0
      labels = "Lie", "Truth"
      size = (1, 0.03)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (0, 1)
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    TextComponent textsubjcon
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press “space” to continue
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Flow
  Routine ID_Entry
  Routine Instructions
  Routine Instructions2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = sample.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('item', 1), ('style', 'directx'), ('condition', 'TRUTH '), ('question', 'What is your favourite song?'), ('respond', '"My favourite song is "Perfect" by Ed Sheeran"')]),
      OrderedDict([('item', 2), ('style', 'indirectx'), ('condition', 'LIE'), ('question', 'What is your favourite tv-show/tv-drama?'), ('respond', '"My favourite drama is F.R.I.E.N.D.S"')]),
      OrderedDict([('item', 3), ('style', 'directx'), ('condition', 'TRUTH '), ('question', 'Is George Washington your role model in life?'), ('respond', '"No, my role model is Lee Kuan Yew"')]),
      OrderedDict([('item', 4), ('style', 'indirectx'), ('condition', 'LIE'), ('question', 'Is MacDonalds your favourite restaurant?'), ('respond', '"Yes, MacDonalds is my favourite restaurant"')]),
      OrderedDict([('item', 5), ('style', 'directx'), ('condition', 'TRUTH '), ('question', 'Who is your favourite celebrity?'), ('respond', '"My favourite celebrity is Chris Hemsworth"')])]
    Routine Example
    Routine ExampleResponse
  LoopTerminator trials_3
  Routine Trials
  LoopInitiator Trialsloop loopType="TrialHandler"
    conditionsFile = sample.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('item', 1), ('style', 'directx'), ('condition', 'TRUTH '), ('question', 'What is your favourite song?'), ('respond', '"My favourite song is "Perfect" by Ed Sheeran"')]),
      OrderedDict([('item', 2), ('style', 'indirectx'), ('condition', 'LIE'), ('question', 'What is your favourite tv-show/tv-drama?'), ('respond', '"My favourite drama is F.R.I.E.N.D.S"')]),
      OrderedDict([('item', 3), ('style', 'directx'), ('condition', 'TRUTH '), ('question', 'Is George Washington your role model in life?'), ('respond', '"No, my role model is Lee Kuan Yew"')]),
      OrderedDict([('item', 4), ('style', 'indirectx'), ('condition', 'LIE'), ('question', 'Is MacDonalds your favourite restaurant?'), ('respond', '"Yes, MacDonalds is my favourite restaurant"')]),
      OrderedDict([('item', 5), ('style', 'directx'), ('condition', 'TRUTH '), ('question', 'Who is your favourite celebrity?'), ('respond', '"My favourite celebrity is Chris Hemsworth"')])]
    Routine Example
  LoopTerminator Trialsloop
  Routine Social_Condition
  Routine SocialInstruct2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $expInfo["participant"] + '_social_questions.csv'
    loopType = sequential
    nReps = 1
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    Routine Social
    Routine Connecting
    Routine Response_S
    Routine Disconnecting
    Routine SubjectiveR
  LoopTerminator trials_2
  Routine Break
  Routine Polygraph_Condition
  Routine PolyInstruct2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $expInfo["participant"] + '_poly_questions.csv'
    loopType = sequential
    nReps = 1
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    Routine Social
    Routine BioConnect
    Routine Response_P
    Routine BioDisConnect
    Routine SubjectiveR
  LoopTerminator trials
  Routine End
